PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 1.0000, 1.0000
  expName = prac4
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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  Routine instr
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    TextComponent text
      color = black
      letterHeight = 40
      startVal [time (s)] = 0.0
      text = Инструкцияяя
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine memo
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    ImageComponent image
      image [set every repeat] = $letter_memo
      size = (1200, 300)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 6.0
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    ImageComponent image_noise
      image [set every repeat] = noise.jpg
      size = (1200, 300)
      startVal [time (s)] = 7.0
      stopVal [duration (s)] = 1.0
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    TextComponent fix_cross
      letterHeight = 40
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text [set every repeat] = +
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  Routine testing
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if gr_side == 'up':
            word_1_pos = (0, 100)
            word_2_pos = (0, -100)
        else:
            word_1_pos = (0, -100)
            word_2_pos = (0, 100)
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    TextComponent word_1
      color = black
      letterHeight = 80
      pos [set every repeat] = word_1_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $gram_word
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    TextComponent word_2
      color = black
      letterHeight = 80
      pos [set every repeat] = word_2_pos
      startVal [time (s)] = 0.0
      text [set every repeat] = $NON_gram_word
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    KeyboardComponent key_resp
      allowedKeys = 'up','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Эксперимент окончен!
        Дождитесь зеленого окошка и слова "Goodbye"
Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = letter_memo.csv
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('letter_memo', '1G1L2.png')]),
      OrderedDict([('letter_memo', '2G1L2.png')]),
      OrderedDict([('letter_memo', '3G1L2.png')]),
      OrderedDict([('letter_memo', '4G1L2.png')]),
      OrderedDict([('letter_memo', '5G1L2.png')]),
      OrderedDict([('letter_memo', '6G1L2.png')]),
      OrderedDict([('letter_memo', '7G1L2.png')]),
      OrderedDict([('letter_memo', '8G1L2.png')]),
      OrderedDict([('letter_memo', '9G1L2.png')]),
      OrderedDict([('letter_memo', '10G1L2.png')]),
      OrderedDict([('letter_memo', '11G1L2.png')]),
      OrderedDict([('letter_memo', '12G1L2.png')]),
      OrderedDict([('letter_memo', '13G1L2.png')]),
      OrderedDict([('letter_memo', '14G1L2.png')]),
      OrderedDict([('letter_memo', '15G1L2.png')]),
      OrderedDict([('letter_memo', '16G1L2.png')]),
      OrderedDict([('letter_memo', '17G1L2.png')]),
      OrderedDict([('letter_memo', '18G1L2.png')])]
    Routine memo
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = letter_testing_table.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('gram_word', 'VJTVTV'), ('NON_gram_word', 'JJTVTV'), ('grammar_type', 1), ('gr_side', 'up'), ('nongr_side', 'down'), ('right_side', 'up'), ('new_or_old', 'old')]),
      OrderedDict([('gram_word', 'VJTNVX'), ('NON_gram_word', 'XJTTVX'), ('grammar_type', 1), ('gr_side', 'down'), ('nongr_side', 'up'), ('right_side', 'down'), ('new_or_old', 'old')]),
      OrderedDict([('gram_word', 'VTVJJJ'), ('NON_gram_word', 'VTVJTN'), ('grammar_type', 1), ('gr_side', 'up'), ('nongr_side', 'down'), ('right_side', 'up'), ('new_or_old', 'old')]),
      OrderedDict([('gram_word', 'NNVTV'), ('NON_gram_word', 'NNVJJ'), ('grammar_type', 1), ('gr_side', 'down'), ('nongr_side', 'up'), ('right_side', 'down'), ('new_or_old', 'old')]),
      OrderedDict([('gram_word', 'VTVJJ'), ('NON_gram_word', 'VTVTN'), ('grammar_type', 1), ('gr_side', 'up'), ('nongr_side', 'down'), ('right_side', 'up'), ('new_or_old', 'old')]),
      OrderedDict([('gram_word', 'VJTNVJ '), ('NON_gram_word', 'VXTTVJ'), ('grammar_type', 1), ('gr_side', 'down'), ('nongr_side', 'up'), ('right_side', 'down'), ('new_or_old', 'new')]),
      OrderedDict([('gram_word', 'NNNVTV '), ('NON_gram_word', 'TNNVTX'), ('grammar_type', 1), ('gr_side', 'up'), ('nongr_side', 'down'), ('right_side', 'up'), ('new_or_old', 'new')]),
      OrderedDict([('gram_word', 'NVXJJJ'), ('NON_gram_word', 'NVXJTT'), ('grammar_type', 1), ('gr_side', 'down'), ('nongr_side', 'up'), ('right_side', 'down'), ('new_or_old', 'new')])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
    Routine testing
  LoopTerminator trials_2
  Routine end
